PsychoPy2experiment version="1.85.4"
Settings
  Monitor = testMonitor
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = use prefs
  Window size (pixels) = [1280, 800]
  Full-screen window = True
  expName = Demo
  Screen = 1
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Routines
  Routine trial
    TextComponent target
      color [set every repeat] = $colour
      text [set every repeat] = $word
      stopVal [duration (s)] = 4.0
      startVal [time (s)] = 0.5
      letterHeight = 0.1
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    KeyboardComponent key_resp_2
      correctAns = $corrAns
      storeCorrect = True
      forceEndRoutine = True
      discard previous = False
      allowedKeys = 'left','right'
      startVal [time (s)] = 0.5
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  Routine instructions
    TextComponent instrText
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Remember, choose the colour of the letters, ignore the word:

        left = red
        down = green
        right = blue
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [{'colour': u'red', 'word': u'red', 'congruent': 1, 'corrAns': u'left'},
      {'colour': u'green', 'word': u'red', 'congruent': 0, 'corrAns': u'down'},
      {'colour': u'green', 'word': u'green', 'congruent': 1, 'corrAns': u'down'},
      {'colour': u'blue', 'word': u'green', 'congruent': 0, 'corrAns': u'right'},
      {'colour': u'blue ', 'word': u'blue ', 'congruent': 1, 'corrAns': u'right'},
      {'colour': u'red', 'word': u'blue', 'congruent': 0, 'corrAns': u'left'}]
    Routine trial
  LoopTerminator trials
