PsychoPy2experiment version="1.85.4"
Settings
  Monitor = testMonitor
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = use prefs
  Save excel file = True
  Window size (pixels) = [1280, 800]
  Full-screen window = True
  Save csv file = True
  expName = movingDots-demo
  logging level = error
  Screen = 1
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Routines
  Routine obj1
    ImageComponent image_4
      stopVal [duration (s)] = 0.030
      pos [set every repeat] = [xpos.pop(), xpos.pop()]
      units = pix
      startVal [time (s)] = gistTime
      image [set every repeat] = gist/vrouw5.png
      size = (150, 150)
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    PolygonComponent polygon_11
      fillColor = $[-1,-1,1]
      stopVal [time (s)] = 6.0
      pos [set every frame] = (xCos1.pop(), ySin1.pop())
      units = pix
      lineColor = $[-1,-1,1]
      startVal [time (s)] = 0.5
      nVertices = 90
      size = (5, 5)
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    PolygonComponent line
      fillColor = $[1,1,1]
      stopVal [duration (s)] = 6.0
      units = pix
      lineColor = $[0.945,-1.000,-0.929]
      startVal [time (s)] = 0.0
      size = (1, 300)
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    CodeComponent code_4
      Begin Experiment:
        xposList = [-300, 300] # initial list
        xposRep = np.repeat(xposList, 240) # repeat for 120 gist images
        xpos = np.ndarray.tolist(xposRep) # change objecttype to use .pop
        shuffle(xpos) # randomise order

        xvelRand = np.random.rand(560) # 14 obj x 40 trials
        xvelWiden = xvelRand*1.5+0.5 # maak snelheden tussen 0.5 en 2
        xvelList = np.ndarray.tolist(xvelWiden) # change objecttype to use pop

        gistTimeRand = np.random.rand(120) # 120 trials
        gistTimeWiden = gistTimeRand*1.5+4 # gist tijd tussen 4 en 5.5 sec
        gistTimeList = np.ndarray.tolist(gistTimeWiden) # use with pop

        directionRand = np.random.random_integers(0, 1, size = 560) # 14 obj x 40 trials
        directionWiden = directionRand*2-1 # discrete waarden -1 of 1
        directionList = np.ndarray.tolist(directionWiden) # use with pop

        yRange = np.arange(0.0, 800) # 60 fps, 6 sec = 360 frames
        yFramerate = yRange/30
        xFramerate = yRange/60
      Begin Routine:
        xvel1 = xvelList.pop()
        gistTime = gistTimeList.pop()
        dir1 = directionList.pop()
        ySin1 = np.ndarray.tolist(50*np.sin(yFramerate*np.pi*xvel1))
        xCos1 = np.ndarray.tolist(150*np.cos(xFramerate*np.pi*(xvel1+0.5)))

        obj1Count = 0
        objSwitch = 0
      End Routine:
        thisExp.addData('obj1Count', obj1Count)
    RatingScaleComponent ratingMV_3
      pos = 0, 0.5
      high = 1
      startVal [time (s)] = 6.0
      size = 1.0
      forceEndRoutine = False
      low = 0
      categoryChoices = 'man', 'vrouw'
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    RatingScaleComponent rating2_3
      labels = '1','20'
      pos = 0, -0.4
      high = 20
      startVal [condition] = $ratingMV_3.status==FINISHED
      markerStart = 10
      disappear = True
      size = 1.0
      forceEndRoutine = True
      low = 1
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  Routine obj3
    ImageComponent image
      stopVal [duration (s)] = 0.030
      pos [set every repeat] = [xpos.pop(), ypos.pop()]
      units = pix
      startVal [time (s)] = gistTime
      image [set every repeat] = $imgName
      size = (150, 150)
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    PolygonComponent polygon_10
      fillColor = $[-1,-1,1]
      stopVal [time (s)] = 6.0
      pos [set every frame] = (xCos1.pop(), ySin1.pop()-10)
      units = pix
      lineColor = $[-1,-1,1]
      startVal [time (s)] = 0.0
      nVertices = 90
      size = (5, 5)
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    PolygonComponent polygon_14
      fillColor = $[-1,-1,1]
      stopVal [time (s)] = 6.0
      pos [set every frame] = (xCos2.pop(), ySin2.pop()+10)
      units = pix
      lineColor = $[-1,-1,1]
      startVal [time (s)] = 0.0
      nVertices = 90
      size = (5, 5)
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    PolygonComponent polygon_15
      fillColor = $[-1.000,-1.000,-1.000]
      stopVal [time (s)] = 6.0
      pos [set every frame] = (xCos3.pop(), ySin3.pop()+20)
      units = pix
      lineColor = $[-1,-1,1]
      startVal [time (s)] = 0.0
      nVertices = 90
      size = (5, 5)
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    PolygonComponent line_4
      fillColor = $[1,1,1]
      stopVal [duration (s)] = 6.0
      units = pix
      lineColor = $[0.945,-1.000,-0.929]
      startVal [time (s)] = 0.0
      size = (1, 300)
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    CodeComponent code_5
      Begin Routine:
        xvel1 = (xvelList.pop()*0.8)
        xvel2 = (xvelList.pop()*0.8)
        xvel3 = (xvelList.pop()*0.5)

        gistTime = gistTimeList.pop()
        dir1 = directionList.pop()
        dir2 = directionList.pop()
        dir3 = directionList.pop()

        # create (co)sin
        apndx = np.repeat(150, 30) # append for stationary
        apndy = np.repeat(0, 30)
        ySin1o = 50*np.sin(yFramerate*np.pi*(xvel3/2))
        ySin1r = ySin1o[::-1]
        ySin1 = np.ndarray.tolist(np.append(ySin1r, apndy))
        ySin2o = 50*np.sin(yFramerate*np.pi*(xvel2/2))
        ySin2r = ySin2o[::-1]
        ySin2 = np.ndarray.tolist(np.append(ySin2r, apndy))
        ySin3o = 50*np.sin(yFramerate*np.pi*xvel1)
        ySin3r = ySin3o[::-1]
        ySin3 = np.ndarray.tolist(np.append(ySin3r, apndy))

        xCos1o = dir1*150*np.cos(xFramerate*np.pi*xvel2)
        xCos1r = xCos1o[::-1]
        xCos1 = np.ndarray.tolist(np.append(xCos1r, (apndx*dir1)))
        xCos2o = dir2*150*np.cos(xFramerate*np.pi*xvel3)
        xCos2r = xCos2o[::-1]
        xCos2 = np.ndarray.tolist(np.append(xCos2r, (apndx*dir2)))
        xCos3o = dir3*150*np.cos(xFramerate*np.pi*xvel1)
        xCos3r = xCos3o[::-1]
        xCos3 = np.ndarray.tolist(np.append(xCos3r, (apndx*dir3)))

        # object count
        obj3_1Count = 0
        obj3_2Count = 0
        obj3_3Count = 0
        switch3_1 = 0 # switch for count
        switch3_2 = 0
        switch3_3 = 0
        # random conditions
        cond2 = rowCond2Full.pop()
        rowCond2 = slice(cond2, cond2+1)
      End Routine:
        trials_3.addData('obj3_1Count', obj3_1Count)
        trials_3.addData('obj3_2Count', obj3_2Count)
        trials_3.addData('obj3_3Count', obj3_3Count)
      Each Frame:
        if (polygon_10.pos[0] < 8) and (polygon_10.pos[0] > -8):
          switch3_1Mem = switch3_1
          switch3_1 = 1
          if switch3_1Mem == 0:
            obj3_1Count +=1
        else:
          switch3_1 = 0

        if (polygon_14.pos[0] < 8) and (polygon_14.pos[0] > -8):
          switch3_2Mem = switch3_2
          switch3_2 = 1
          if switch3_2Mem == 0:
            obj3_2Count +=1
        else:
          switch3_2 = 0

        if (polygon_15.pos[0] < 8) and (polygon_15.pos[0] > -8):
          switch3_3Mem = switch3_3
          switch3_3 = 1
          if switch3_3Mem == 0:
            obj3_3Count +=1
        else:
          switch3_3 = 0
    RatingScaleComponent ratingMV3_
      pos = 0, 0.5
      high = 1
      startVal [time (s)] = 6.0
      size = 1.0
      forceEndRoutine = False
      low = 0
      categoryChoices = 'man', 'geen foto gezien', 'vrouw'
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    RatingScaleComponent rating3_
      labels = '1','20'
      pos = 0, -0.4
      high = 20
      startVal [condition] = $ratingMV3_.status==FINISHED
      markerStart = 10
      size = 1.0
      forceEndRoutine = True
      low = 1
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    TextComponent text_8
      text [set every repeat] = $trialnumber
      pos = (0.9, 0.9)
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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  Routine obj2
    ImageComponent image_2
      stopVal [duration (s)] = 0.030
      pos [set every repeat] = [xpos.pop(), ypos.pop()]
      units = pix
      startVal [time (s)] = gistTime
      image [set every repeat] = $imgName
      size = (150, 150)
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    PolygonComponent polygon
      fillColor = $[-1,-1,1]
      stopVal [time (s)] = 6.0
      pos [set every frame] = (xCos1.pop(), ySin1.pop()-10)
      units = pix
      lineColor = $[-1,-1,1]
      startVal [time (s)] = 0.0
      nVertices = 90
      size = (5, 5)
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    PolygonComponent polygon_2
      fillColor = $[-1,-1,1]
      stopVal [time (s)] = 6.0
      pos [set every frame] = (xCos2.pop(), ySin2.pop()+10)
      units = pix
      lineColor = $[-1,-1,1]
      startVal [time (s)] = 0.0
      nVertices = 90
      size = (5, 5)
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    PolygonComponent line_3
      fillColor = $[1,1,1]
      stopVal [duration (s)] = 6.0
      units = pix
      lineColor = $[0.945,-1.000,-0.929]
      startVal [time (s)] = 0.0
      size = (1, 300)
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    CodeComponent code
      Begin Experiment:
        # setup positions for gist
        xposList = [-250, 250] # initial list
        xposRep = np.repeat(xposList, 65) # repeat for 60 gist images
        xpos = np.ndarray.tolist(xposRep) # change objecttype to use with pop
        shuffle(xpos) # randomise order

        yposList = [-250, 250, 0] # initial list
        yposRep = np.repeat(yposList, 65) # repeat for 60 gist images
        ypos = np.ndarray.tolist(yposRep) # change objecttype to use with pop
        shuffle(ypos) # randomise order

        #setup velocities for objects
        xvelRand = np.random.rand(190) # (2+3+4) obj x 20 trials
        xvelWiden = xvelRand*0.5+0.7 # maak snelheden tussen 0.5 en 1.2
        xvelList = np.ndarray.tolist(xvelWiden) # change objecttype to use pop

        #setup random gisttimes
        gistTimeRand = np.random.rand(60) # 60 trials
        gistTimeWiden = gistTimeRand*1.5+4 # gist tijd tussen 4 en 5.5 sec
        gistTimeList = np.ndarray.tolist(gistTimeWiden) # use with pop

        #setup random directions for objects
        directionRand = np.random.random_integers(0, 1, size = 190) # 9 obj x 20 trials
        directionWiden = directionRand*2-1 # discrete waarden -1 of 1
        directionList = np.ndarray.tolist(directionWiden) # use with pop

        #setup frames for x/y-sinus
        yRange = np.arange(0.0, 800) # 60 fps, 6 sec = 360 frames. 720 frames voor 120fps.
        yFramerate = yRange/30
        xFramerate = yRange/60

        #setup random order for gists across conditions
        rowAr = np.arange(80) # 80 fotos
        rowList = np.ndarray.tolist(rowAr)
        shuffle(rowList) # random volgorde
      Begin Routine:
        # pop random speeds
        xvel1 = xvelList.pop()
        xvel2 = xvelList.pop()
        # pop random timing
        gistTime = gistTimeList.pop()
        # pop random direction
        dir1 = directionList.pop()
        dir2 = directionList.pop()

        # stationary 30 frames
        apndx = np.repeat(150, 30)
        apndy = np.repeat(0, 30)
        # create (co)sin waves
        ySin1o = 50*np.sin(yFramerate*np.pi*(xvel1/2)) # make (co)sin
        ySin1r = ySin1o[::-1] # reverse direction to start with 1 or 0
        ySin1 = np.ndarray.tolist(np.append(ySin1r, apndy)) # append stationary
        ySin2o = 50*np.sin(yFramerate*np.pi*(xvel2/2))
        ySin2r = ySin2o[::-1]
        ySin2 = np.ndarray.tolist(np.append(ySin2r, apndy))
        xCos1o = dir1*150*np.cos(xFramerate*np.pi*xvel2)
        xCos1r = xCos1o[::-1]
        xCos1 = np.ndarray.tolist(np.append(xCos1r, (apndx*dir1)))
        xCos2o = dir2*150*np.cos(xFramerate*np.pi*xvel1)
        xCos2r = xCos2o[::-1]
        xCos2 = np.ndarray.tolist(np.append(xCos2r, (apndx*dir2)))

        # setup Objectcount
        obj2_1Count = 0
        obj2_2Count = 0

        switch2_1 = 0 #setup switch for counting
        switch2_2 = 0

        cond1 = rowCond1Full.pop()
        rowCond1 = slice(cond1, cond1+1)

        trialnumber = trialnumber + 1
      End Routine:
        trials_2.addData('obj2_1Count', obj2_1Count)
        trials_2.addData('obj2_2Count', obj2_2Count)
      Each Frame:
        if (polygon.pos[0] < 8) and (polygon.pos[0] > -8):
          switch2_1Mem = switch2_1
          switch2_1 = 1
          if switch2_1Mem == 0:
            obj2_1Count +=1
        else:
          switch2_1 = 0

        if (polygon_2.pos[0] < 8) and (polygon_2.pos[0] > -8):
          switch2_2Mem = switch2_2
          switch2_2 = 1
          if switch2_2Mem == 0:
            obj2_2Count +=1
        else:
          switch2_2 = 0
    RatingScaleComponent ratingMV2_
      pos = 0, 0.5
      high = 1
      startVal [time (s)] = 6.0
      size = 1.0
      forceEndRoutine = False
      low = 0
      categoryChoices = 'man', 'geen foto gezien', 'vrouw'
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    RatingScaleComponent rating2_
      labels = '1','10','20'
      pos = 0, -0.4
      high = 20
      startVal [condition] = $ratingMV2_.status==FINISHED
      markerStart = 10
      disappear = True
      size = 1.0
      forceEndRoutine = True
      low = 1
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    TextComponent text_7
      text [set every repeat] = $trialnumber
      pos = (0.9, 0.9)
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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  Routine obj4
  Routine obj8
  Routine instructies_2
    ImageComponent image_6
      pos = (300, 0)
      units = pix
      startVal [time (s)] = 0.0
      image = gist/instructies_obj.png
      size = (230, 322)
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    TextComponent text_2
      pos = (-0.5, 0)
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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      text:
        * Instructies *

        Je ziet straks meerdere bewegende blauwe balletjes
        in beeld, die over een rode lijn heen bewegen.

        Druk een toets om naar het volgende instructiescherm te gaan.
    KeyboardComponent key_resp_intro_1
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine obj4__2
    ImageComponent image_5
      stopVal [duration (s)] = 0.030
      pos [set every repeat] = [xpos.pop(), 0]
      units = pix
      startVal [time (s)] = gistTime
      image [set every repeat] = gist/man13.png
      size = (100, 100)
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    PolygonComponent polygon_16
      fillColor = $[-1,-1,1]
      stopVal [time (s)] = 6.0
      pos [set every frame] = (xCos1.pop(), ySin1.pop())
      units = pix
      lineColor = $[-1,-1,1]
      startVal [time (s)] = 0.5
      nVertices = 90
      size = (5, 5)
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    PolygonComponent polygon_17
      fillColor = $[-1,-1,1]
      stopVal [time (s)] = 6.0
      pos [set every frame] = (xCos2.pop(), 20+ySin2.pop())
      units = pix
      lineColor = $[-1,-1,1]
      startVal [time (s)] = 0.5
      nVertices = 90
      size = (5, 5)
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    PolygonComponent polygon_18
      fillColor = $[-1,-1,1]
      stopVal [time (s)] = 6.0
      pos [set every frame] = (xCos3.pop(), 40+ySin3.pop())
      units = pix
      lineColor = $[-1,-1,1]
      startVal [time (s)] = 0.5
      nVertices = 90
      size = (5, 5)
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    PolygonComponent polygon_19_red
      fillColor = $[1.0,-1.0,-1.0]
      stopVal [time (s)] = 6.0
      pos [set every frame] = (xCos4.pop(), 60+ySin4.pop())
      units = pix
      lineColor = $[1.0,-1.0,-1.0]
      startVal [time (s)] = 0.5
      nVertices = 90
      size = (5, 5)
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    PolygonComponent polygon_20_red
      fillColor = $[1.0,-1.0,-1.0]
      stopVal [time (s)] = 6.0
      pos [set every frame] = (xCos5.pop(), 80+ySin5.pop())
      units = pix
      lineColor = $[1.0,-1.0,-1.0]
      startVal [time (s)] = 0.5
      nVertices = 90
      size = (5, 5)
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    PolygonComponent line_5
      fillColor = $[1,1,1]
      stopVal [duration (s)] = 6.0
      units = pix
      lineColor = $[0.945,-1.000,-0.929]
      startVal [time (s)] = 0.0
      size = (1, 300)
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    CodeComponent code_6
      Begin Routine:
        xvel1 = (xvelList.pop()/2)
        xvel2 = (xvelList.pop()/2)
        xvel3 = (xvelList.pop()/2)
        xvel4 = (xvelList.pop()/2)
        xvel5 = (xvelList.pop()/2)
        gistTime = gistTimeList.pop()
        ySin1 = np.ndarray.tolist(50*np.sin(yFramerate*np.pi*xvel5))
        ySin2 = np.ndarray.tolist(50*np.sin(yFramerate*np.pi*xvel4))
        ySin3 = np.ndarray.tolist(50*np.sin(yFramerate*np.pi*xvel3))
        ySin4 = np.ndarray.tolist(50*np.sin(yFramerate*np.pi*xvel2))
        ySin5 = np.ndarray.tolist(50*np.sin(yFramerate*np.pi*xvel1))

        xCos1 = np.ndarray.tolist((150*np.cos(xFramerate*np.pi*xvel3)))
        xCos2 = np.ndarray.tolist((150*np.cos(xFramerate*np.pi*xvel4)))
        xCos3 = np.ndarray.tolist((150*np.cos(xFramerate*np.pi*xvel5)))
        xCos4 = np.ndarray.tolist((150*np.cos(xFramerate*np.pi*xvel1)))
        xCos5 = np.ndarray.tolist((150*np.cos(xFramerate*np.pi*xvel2)))

        obj4_1Count = 0
        obj4_2Count = 0
        obj4_3Count = 0
      End Routine:
        thisExp.addData('obj4_1Count', obj4_1Count)
        thisExp.addData('obj4_2Count', obj4_2Count)
        thisExp.addData('obj4_3Count', obj4_3Count)
      Each Frame:
        if polygon_16.pos[1] == 0:
            obj4_1Count = obj4_1Count + 1
        if polygon_17.pos[1] == 0:
            obj4_2Count = obj4_2Count + 1
        if polygon_18.pos[1] == 0:
            obj4_3Count = obj4_3Count + 1
    RatingScaleComponent ratingMV_5
      pos = 0, 0.5
      high = 1
      startVal [time (s)] = 6.0
      size = 1.0
      forceEndRoutine = False
      low = 0
      categoryChoices = 'man', 'vrouw'
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    RatingScaleComponent rating2_5
      labels = '1','20'
      pos = 0, -0.4
      high = 20
      startVal [condition] = $ratingMV_5.status==FINISHED
      markerStart = 10
      size = 1.0
      forceEndRoutine = True
      low = 1
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  Routine demografische_info
    RatingScaleComponent leeftijd
      labels = '17', '60'
      pos = 0, 0
      high = 60
      startVal [time (s)] = 0.0
      size = 1.0
      storeRatingTime = False
      forceEndRoutine = True
      low = 17
      scaleDescription = wat is je leeftijd?
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    TextComponent text_6
      pos = (0, -0.5)
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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  Routine obj4_
    ImageComponent image_3
      stopVal [duration (s)] = 0.030
      pos [set every repeat] = [xpos.pop(), ypos.pop()]
      units = pix
      startVal [time (s)] = gistTime
      image [set every repeat] = $imgName
      size = (150, 150)
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    PolygonComponent polygon_8
      fillColor = $[-1,-1,1]
      stopVal [time (s)] = 6.0
      pos [set every frame] = (xCos1.pop(), ySin1.pop()-10)
      units = pix
      lineColor = $[-1,-1,1]
      startVal [time (s)] = 0.0
      nVertices = 90
      size = (5, 5)
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    PolygonComponent polygon_9
      fillColor = $[-1,-1,1]
      stopVal [time (s)] = 6.0
      pos [set every frame] = (xCos2.pop(), ySin2.pop()+10)
      units = pix
      lineColor = $[-1,-1,1]
      startVal [time (s)] = 0.0
      nVertices = 90
      size = (5, 5)
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    PolygonComponent polygon_12
      fillColor = $[-1,-1,1]
      stopVal [time (s)] = 6.0
      pos [set every frame] = (xCos3.pop(), ySin3.pop()+20)
      units = pix
      lineColor = $[-1,-1,1]
      startVal [time (s)] = 0.0
      nVertices = 90
      size = (5, 5)
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    PolygonComponent polygon_13
      fillColor = $[-1,-1,1]
      stopVal [time (s)] = 6.0
      pos [set every frame] = (xCos4.pop(), ySin4.pop()-20)
      units = pix
      lineColor = $[-1,-1,1]
      startVal [time (s)] = 0.0
      nVertices = 90
      size = (5, 5)
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    PolygonComponent line_2
      fillColor = $[1,1,1]
      stopVal [duration (s)] = 6.0
      units = pix
      lineColor = $[0.945,-1.000,-0.929]
      startVal [time (s)] = 0.0
      size = (1, 300)
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    CodeComponent code_3
      Begin Routine:
        xvel1 = (xvelList.pop()*0.8)
        xvel2 = (xvelList.pop()*0.8)
        xvel3 = (xvelList.pop()*0.7)
        xvel4 = (xvelList.pop()*0.5)
        gistTime = gistTimeList.pop()
        dir1 = directionList.pop()
        dir2 = directionList.pop()
        dir3 = directionList.pop()
        dir4 = directionList.pop()
        # create (co)sin
        apndx = np.repeat(150, 30)
        apndy = np.repeat(0, 30)
        ySin1o = 50*np.sin(yFramerate*np.pi*(xvel4/2))
        ySin1r = ySin1o[::-1]
        ySin1 = np.ndarray.tolist(np.append(ySin1r, apndy))
        ySin2o = 50*np.sin(yFramerate*np.pi*(xvel3/2))
        ySin2r = ySin2o[::-1]
        ySin2 = np.ndarray.tolist(np.append(ySin2r, apndy))
        ySin3o = 50*np.sin(yFramerate*np.pi*xvel2)
        ySin3r = ySin3o[::-1]
        ySin3 = np.ndarray.tolist(np.append(ySin3r, apndy))
        ySin4o = 50*np.sin(yFramerate*np.pi*xvel1)
        ySin4r = ySin4o[::-1]
        ySin4 = np.ndarray.tolist(np.append(ySin4r, apndy))
        xCos1o = dir1*150*np.cos(xFramerate*np.pi*xvel3)
        xCos1r = xCos1o[::-1]
        xCos1 = np.ndarray.tolist(np.append(xCos1r, (apndx*dir1)))
        xCos2o = dir2*150*np.cos(xFramerate*np.pi*xvel4)
        xCos2r = xCos2o[::-1]
        xCos2 = np.ndarray.tolist(np.append(xCos2r, (apndx*dir2)))
        xCos3o = dir3*150*np.cos(xFramerate*np.pi*xvel1)
        xCos3r = xCos3o[::-1]
        xCos3 = np.ndarray.tolist(np.append(xCos3r, (apndx*dir3)))
        xCos4o = dir4*150*np.cos(xFramerate*np.pi*xvel2)
        xCos4r = xCos4o[::-1]
        xCos4 = np.ndarray.tolist(np.append(xCos4r, (apndx*dir4)))

        # set up counting objects
        obj4_1Count = 0
        obj4_2Count = 0
        obj4_3Count = 0
        obj4_4Count = 0
        switch4_1 = 0 # switch for counting
        switch4_2 = 0
        switch4_3 = 0
        switch4_4 = 0

        cond3 = rowCond3Full.pop()
        rowCond3 = slice(cond3, cond3+1)
      End Routine:
        trials_4.addData('obj4_1Count', obj4_1Count)
        trials_4.addData('obj4_2Count', obj4_2Count)
        trials_4.addData('obj4_3Count', obj4_3Count)
        trials_4.addData('obj4_4Count', obj4_4Count)
      Each Frame:
        # count objects over red line area
        if (polygon_8.pos[0] < 8) and (polygon_8.pos[0] > -8):
          switch4_1Mem = switch4_1
          switch4_1 = 1
          if switch4_1Mem == 0:
            obj4_1Count +=1
        else:
          switch4_1 = 0
        if (polygon_9.pos[0] < 8) and (polygon_9.pos[0] > -8):
          switch4_2Mem = switch4_2
          switch4_2 = 1
          if switch4_2Mem == 0:
            obj4_2Count +=1
        else:
          switch4_2 = 0
        if (polygon_12.pos[0] < 8) and (polygon_12.pos[0] > -8):
          switch4_3Mem = switch4_3
          switch4_3 = 1
          if switch4_3Mem == 0:
            obj4_3Count +=1
        else:
          switch4_3 = 0
        if (polygon_13.pos[0] < 8) and (polygon_13.pos[0] > -8):
          switch4_4Mem = switch4_4
          switch4_4 = 1
          if switch4_4Mem == 0:
            obj4_4Count +=1
        else:
          switch4_4 = 0
    RatingScaleComponent ratingMV4_
      pos = 0, 0.5
      high = 1
      startVal [time (s)] = 6.0
      size = 1.0
      forceEndRoutine = False
      low = 0
      categoryChoices = 'man', 'geen foto gezien', 'vrouw'
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    RatingScaleComponent rating4_
      labels = '1','20'
      pos = 0, -0.4
      high = 20
      startVal [condition] = $ratingMV4_.status==FINISHED
      markerStart = 10
      size = 1.0
      forceEndRoutine = True
      low = 1
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    TextComponent text_9
      text [set every repeat] = $trialnumber
      pos = (0.9, 0.9)
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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  Routine instructie
    TextComponent text
      pos = (-0.5, 0)
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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      text:
        * Instructies *

        Je hebt nu tegelijkertijd twee taken:

        Taak 1:
        Tel hoe vaak er in totaal een blauw balletje
        over de rode lijn gaat. Elk balletje wordt apart geteld.

        Focus je blik op de rode lijn, niet op de balletjes.

        Taak 2:
        Is de foto een man of een vrouw?
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructies_4
    ImageComponent image_7
      pos = (300, 200)
      units = pix
      startVal [time (s)] = 0.0
      image = gist/instructies_mv.png
      size = (466, 202)
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    TextComponent text_3
      pos = (-0.5, 0.3)
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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      text:
        * Instructies *

        De test stopt na 6 seconden.
        Raporteer man of vrouw door op
        het uiteinde van de lijn te klikken.
    KeyboardComponent key_resp_intro
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent image_9
      pos = (300, -200)
      units = pix
      startVal [time (s)] = 0.0
      image = gist/instructies_objcount.png
      size = (491, 206)
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    TextComponent text_5
      pos = (-0.5, -0.3)
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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      text:
        Raporteer het totaal aantal keer dat de
        balletjes de lijn hebben gekruist
        door op de getallenlijn het juiste aantal
        te selecteren.

        Er zijn 60 tests, van elk 6 seconden.
        Het totale experiment duurt iets minder dan 10 minuten.

        Klaar? Druk nu een toets om de test te starten.
    CodeComponent code_7
      Begin Experiment:
        trialnumber = 0
      Begin Routine:
        # selecteer 21 random fotos voor elke conditie
        rowCond1Full = rowList[0:25]
        rowCond2Full = rowList[26:52]
        rowCond3Full = rowList[53:79]

        cond1 = rowCond1Full.pop()
        rowCond1 = slice(cond1, cond1+1)

        # random conditions
        cond2 = rowCond2Full.pop()
        rowCond2 = slice(cond2, cond2+1)

        cond3 = rowCond3Full.pop()
        rowCond3 = slice(cond3, cond3+1)
  Routine instructies_3
    ImageComponent image_8
      pos = (300, 0)
      units = pix
      startVal [time (s)] = 0.0
      image = gist/man6.png
      size = (150, 150)
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    TextComponent text_4
      pos = (-0.5, 0)
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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      text:
        * Instructies *

        Zeer kortdurend verschijnt er
        een foto van een man of vrouw in beeld.
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine informedConsent
    TextComponent text_10
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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      text:
        ﻿*Geinformeerde toestemming*

        Universiteit Utrecht
        Opleiding Kunstmatige Intelligentie
        Libby Besselaar - l.l.m.vandenbesselaar@students.uu.nl
        Kiki Piekartz - k.g.piekartz@students.uu.nl
        Eva Bakels - e.e.bakels@students.uu.nl
        Raoul Grouls - r.h.grouls@students.uu.nl

        Onderzoek: Bewustzijn en aandacht

        Ik neem uit vrije wil deel aan het onderzoek “Bewustzijn en aandacht”,
        uitgaande van het vak “Inleiding tot de Cognitiewetenschap” aan de Universiteit Utrecht.

        Ik ga ermee akkoord dat de resultaten van dit onderzoek gebruikt zullen worden
        voor wetenschappelijke doeleinden en mogelijk worden gepubliceerd.
        Mijn naam wordt daarbij niet gepubliceerd en de vertrouwelijkheid  van de gegevens is in elk stadium van het onderzoek gewaarborgd.
        Ik behoud het recht om op elk moment mijn deelname aan het onderzoek stop te zetten.

        Door op de 'y'-toets te drukken, verklaart u het bovenstaande gelezen te hebben en ermee in te stemmen.
    KeyboardComponent key_resp_6
      forceEndRoutine = True
      allowedKeys = 'y'
      startVal [time (s)] = 0.0
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  Routine geslacht
    RatingScaleComponent manvrouw
      labels = 'vrouw','man'
      pos = 0, 0
      high = 1
      startVal [time (s)] = 0.0
      size = 1.0
      storeRatingTime = False
      forceEndRoutine = True
      low = 0
      scaleDescription = Ben je man of vrouw?
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    CodeComponent code_2
Flow
  Routine informedConsent
  Routine demografische_info
  Routine geslacht
  Routine instructies_2
  Routine instructies_3
  Routine instructie
  Routine instructies_4
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = 15
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    LoopInitiator trials_2 loopType="TrialHandler"
      conditionsFile = conditions.xlsx
      loopType = sequential
      nReps = 1
      Selected rows = $rowCond1
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      conditions:
        [{'imgName': u'gist/man1.png', 'corrAns': u'm'},
        {'imgName': u'gist/man2.png', 'corrAns': u'm'},
        {'imgName': u'gist/man3.png', 'corrAns': u'm'},
        {'imgName': u'gist/man4.png', 'corrAns': u'm'},
        {'imgName': u'gist/man5.png', 'corrAns': u'm'},
        {'imgName': u'gist/man6.png', 'corrAns': u'm'},
        {'imgName': u'gist/man7.png', 'corrAns': u'm'},
        {'imgName': u'gist/man8.png', 'corrAns': u'm'},
        {'imgName': u'gist/man9.png', 'corrAns': u'm'},
        {'imgName': u'gist/man10.png', 'corrAns': u'm'},
        {'imgName': u'gist/man11.png', 'corrAns': u'm'},
        {'imgName': u'gist/man12.png', 'corrAns': u'm'},
        {'imgName': u'gist/man13.png', 'corrAns': u'm'},
        {'imgName': u'gist/man14.png', 'corrAns': u'm'},
        {'imgName': u'gist/man15.png', 'corrAns': u'm'},
        {'imgName': u'gist/man16.png', 'corrAns': u'm'},
        {'imgName': u'gist/man17.png', 'corrAns': u'm'},
        {'imgName': u'gist/man18.png', 'corrAns': u'm'},
        {'imgName': u'gist/man19.png', 'corrAns': u'm'},
        {'imgName': u'gist/man20.png', 'corrAns': u'm'},
        {'imgName': u'gist/man21.png', 'corrAns': u'm'},
        {'imgName': u'gist/man22.png', 'corrAns': u'm'},
        {'imgName': u'gist/man23.png', 'corrAns': u'm'},
        {'imgName': u'gist/man24.png', 'corrAns': u'm'},
        {'imgName': u'gist/man25.png', 'corrAns': u'm'},
        {'imgName': u'gist/man26.png', 'corrAns': u'm'},
        {'imgName': u'gist/man27.png', 'corrAns': u'm'},
        {'imgName': u'gist/man28.png', 'corrAns': u'm'},
        {'imgName': u'gist/man29.png', 'corrAns': u'm'},
        {'imgName': u'gist/man30.png', 'corrAns': u'm'},
        {'imgName': u'gist/man31.png', 'corrAns': u'm'},
        {'imgName': u'gist/man32.png', 'corrAns': u'm'}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
      Routine obj2
    LoopTerminator trials_2
    LoopInitiator trials_3 loopType="TrialHandler"
      conditionsFile = conditions.xlsx
      loopType = sequential
      nReps = 1
      Selected rows = $rowCond2
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      conditions:
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      Routine obj3
    LoopTerminator trials_3
    LoopInitiator trials_4 loopType="TrialHandler"
      conditionsFile = conditions.xlsx
      loopType = sequential
      nReps = 1
      Selected rows = $rowCond3
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      conditions:
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      Routine obj4_
    LoopTerminator trials_4
  LoopTerminator trials
