PsychoPy2experiment version="1.85.4"
Settings
  Monitor = testMonitor
  Experiment info = {u'session': u'001', u'participant': u'001'}
  Units = use prefs
  Save excel file = True
  Window size (pixels) = [1280, 800]
  Full-screen window = True
  expName = movingDots
  Screen = 1
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Routines
  Routine obj1
    ImageComponent image_4
      stopVal [duration (s)] = 0.030
      pos [set every repeat] = [xpos.pop(), 0]
      units = pix
      startVal [time (s)] = gistTime
      image [set every repeat] = $imgName
      size = (150, 150)
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    PolygonComponent polygon_11
      fillColor = $[-1,-1,1]
      stopVal [time (s)] = 6.0
      pos [set every frame] = (xCos1.pop(), ySin1.pop())
      units = pix
      lineColor = $[-1,-1,1]
      startVal [time (s)] = 0.5
      nVertices = 90
      size = (5, 5)
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    PolygonComponent line
      fillColor = $[1,1,1]
      stopVal [duration (s)] = 6.0
      units = pix
      lineColor = $[0.945,-1.000,-0.929]
      startVal [time (s)] = 0.0
      size = (1, 300)
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    CodeComponent code_4
      Begin Experiment:
        xposList = [-300, 300] # initial list
        xposRep = np.repeat(xposList, 120) # repeat for 120 gist images
        xpos = np.ndarray.tolist(xposRep) # change objecttype to use .pop
        shuffle(xpos) # randomise order

        xvelRand = np.random.rand(560) # 14 obj x 40 trials
        xvelWiden = xvelRand*1.5+0.5 # maak snelheden tussen 0.5 en 2
        xvelList = np.ndarray.tolist(xvelWiden) # change objecttype to use pop

        gistTimeRand = np.random.rand(120) # 120 trials
        gistTimeWiden = gistTimeRand*1.5+4 # gist tijd tussen 4 en 5.5 sec
        gistTimeList = np.ndarray.tolist(gistTimeWiden) # use with pop

        directionRand = np.random.random_integers(0, 1, size = 560) # 14 obj x 40 trials
        directionWiden = directionRand*2-1 # discrete waarden -1 of 1
        directionList = np.ndarray.tolist(directionWiden) # use with pop

        yRange = np.arange(0.0, 800) # 60 fps, 6 sec = 360 frames
        yFramerate = yRange/30
        xFramerate = yRange/60
      Begin Routine:
        xvel1 = xvelList.pop()
        gistTime = gistTimeList.pop()
        dir1 = directionList.pop()
        ySin1 = np.ndarray.tolist(50*np.sin(yFramerate*np.pi*xvel1))
        xCos1 = np.ndarray.tolist(150*np.cos(xFramerate*np.pi*(xvel1+0.5)))
    RatingScaleComponent ratingMV_3
      pos = 0, 0.5
      high = 1
      startVal [time (s)] = 6.0
      size = 1.0
      forceEndRoutine = False
      low = 0
      categoryChoices = 'man', 'vrouw'
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    RatingScaleComponent rating2_3
      labels = '1','20'
      pos = 0, -0.4
      high = 20
      startVal [condition] = $ratingMV_3.status==FINISHED
      markerStart = 10
      disappear = True
      size = 1.0
      forceEndRoutine = True
      low = 1
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  Routine obj3
    ImageComponent image
      stopVal [duration (s)] = 0.030
      pos [set every repeat] = [xpos.pop(), 0]
      units = pix
      startVal [time (s)] = gistTime
      image [set every repeat] = $imgName
      size = (100, 100)
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    PolygonComponent polygon_10
      fillColor = $[-1,-1,1]
      stopVal [time (s)] = 6.0
      pos [set every frame] = (xCos1.pop(), ySin1.pop())
      units = pix
      lineColor = $[-1,-1,1]
      startVal [time (s)] = 0.5
      nVertices = 90
      size = (5, 5)
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    PolygonComponent polygon_14
      fillColor = $[-1,-1,1]
      stopVal [time (s)] = 6.0
      pos [set every frame] = (xCos2.pop(), 50+ySin2.pop())
      units = pix
      lineColor = $[-1,-1,1]
      startVal [time (s)] = 0.5
      nVertices = 90
      size = (5, 5)
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    PolygonComponent polygon_15
      fillColor = $[-1.000,-1.000,-1.000]
      stopVal [time (s)] = 6.0
      pos [set every frame] = (xCos3.pop(), 75+ySin3.pop())
      units = pix
      lineColor = $[-1,-1,1]
      startVal [time (s)] = 0.5
      nVertices = 90
      size = (5, 5)
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    PolygonComponent line_4
      fillColor = $[1,1,1]
      stopVal [duration (s)] = 6.0
      units = pix
      lineColor = $[0.945,-1.000,-0.929]
      startVal [time (s)] = 0.0
      size = (1, 300)
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    CodeComponent code_5
      Begin Routine:
        xvel1 = (xvelList.pop()/2)
        xvel2 = (xvelList.pop()/2)
        xvel3 = (xvelList.pop()/2)

        gistTime = gistTimeList.pop()
        dir1 = directionList.pop()
        dir2 = directionList.pop()
        dir3 = directionList.pop()

        ySin1 = np.ndarray.tolist(50*np.sin(yFramerate*np.pi*xvel2))
        ySin2 = np.ndarray.tolist(50*np.sin(yFramerate*np.pi*xvel3))
        ySin3 = np.ndarray.tolist(50*np.sin(yFramerate*np.pi*xvel1))

        xCos1 = np.ndarray.tolist((150*np.cos(xFramerate*np.pi*xvel3)))
        xCos2 = np.ndarray.tolist((150*np.cos(xFramerate*np.pi*xvel1)))
        xCos3 = np.ndarray.tolist((150*np.cos(xFramerate*np.pi*xvel2)))
    RatingScaleComponent ratingMV_4
      pos = 0, 0.5
      high = 1
      startVal [time (s)] = 6.0
      disappear = True
      size = 1.0
      forceEndRoutine = False
      low = 0
      categoryChoices = 'man', 'vrouw'
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    RatingScaleComponent rating2_4
      labels = '1','20'
      pos = 0, -0.4
      high = 20
      startVal [condition] = $ratingMV_4.status==FINISHED
      markerStart = 10
      size = 1.0
      forceEndRoutine = True
      low = 1
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  Routine obj2
    ImageComponent image_2
      stopVal [duration (s)] = 0.030
      pos [set every repeat] = [xpos.pop(), 0]
      units = pix
      startVal [time (s)] = gistTime
      image [set every repeat] = $imgName
      size = (150, 150)
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    PolygonComponent polygon
      fillColor = $[-1,-1,1]
      stopVal [time (s)] = 6.0
      pos [set every frame] = (xCos1.pop(), ySin1.pop())
      units = pix
      lineColor = $[-1,-1,1]
      startVal [time (s)] = 0.5
      nVertices = 90
      size = (5, 5)
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    PolygonComponent polygon_2
      fillColor = $[-1,-1,1]
      stopVal [time (s)] = 6.0
      pos [set every frame] = (xCos2.pop(), 50+ySin2.pop())
      units = pix
      lineColor = $[-1,-1,1]
      startVal [time (s)] = 0.5
      nVertices = 90
      size = (5, 5)
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    PolygonComponent line_3
      fillColor = $[1,1,1]
      stopVal [duration (s)] = 6.0
      units = pix
      lineColor = $[0.945,-1.000,-0.929]
      startVal [time (s)] = 0.0
      size = (1, 300)
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    CodeComponent code
      Begin Routine:
        xvel1 = xvelList.pop()
        xvel2 = xvelList.pop()
        gistTime = gistTimeList.pop()
        dir1 = directionList.pop()
        dir2 = directionList.pop()
        ySin1 = np.ndarray.tolist(50*np.sin(yFramerate*np.pi*xvel2))
        ySin2 = np.ndarray.tolist(50*np.sin(yFramerate*np.pi*xvel1))
        xCos1 = np.ndarray.tolist((150*np.cos(xFramerate*np.pi*xvel1)))
        xCos2 = np.ndarray.tolist((150*np.cos(xFramerate*np.pi*xvel2)))
    RatingScaleComponent ratingMV
      pos = 0, 0.5
      high = 1
      startVal [time (s)] = 6.0
      size = 1.0
      forceEndRoutine = False
      low = 0
      categoryChoices = 'man', 'vrouw'
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    RatingScaleComponent rating2
      labels = '1','20'
      pos = 0, -0.4
      high = 20
      startVal [condition] = $ratingMV.status==FINISHED
      markerStart = 10
      disappear = True
      size = 1.0
      forceEndRoutine = True
      low = 1
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  Routine obj4
  Routine obj8
  Routine obj4__2
    ImageComponent image_5
      stopVal [duration (s)] = 0.030
      pos [set every repeat] = [xpos.pop(), 0]
      units = pix
      startVal [time (s)] = gistTime
      image [set every repeat] = $imgName
      size = (100, 100)
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    PolygonComponent polygon_16
      fillColor = $[-1,-1,1]
      stopVal [time (s)] = 6.0
      pos [set every frame] = (xCos1.pop(), ySin1.pop())
      units = pix
      lineColor = $[-1,-1,1]
      startVal [time (s)] = 0.5
      nVertices = 90
      size = (5, 5)
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    PolygonComponent polygon_17
      fillColor = $[-1,-1,1]
      stopVal [time (s)] = 6.0
      pos [set every frame] = (xCos2.pop(), 20+ySin2.pop())
      units = pix
      lineColor = $[-1,-1,1]
      startVal [time (s)] = 0.5
      nVertices = 90
      size = (5, 5)
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    PolygonComponent polygon_18
      fillColor = $[-1,-1,1]
      stopVal [time (s)] = 6.0
      pos [set every frame] = (xCos3.pop(), 40+ySin3.pop())
      units = pix
      lineColor = $[-1,-1,1]
      startVal [time (s)] = 0.5
      nVertices = 90
      size = (5, 5)
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    PolygonComponent polygon_19_red
      fillColor = $[1.0,-1.0,-1.0]
      stopVal [time (s)] = 6.0
      pos [set every frame] = (xCos4.pop(), 60+ySin4.pop())
      units = pix
      lineColor = $[1.0,-1.0,-1.0]
      startVal [time (s)] = 0.5
      nVertices = 90
      size = (5, 5)
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    PolygonComponent polygon_20_red
      fillColor = $[1.0,-1.0,-1.0]
      stopVal [time (s)] = 6.0
      pos [set every frame] = (xCos5.pop(), 80+ySin5.pop())
      units = pix
      lineColor = $[1.0,-1.0,-1.0]
      startVal [time (s)] = 0.5
      nVertices = 90
      size = (5, 5)
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    PolygonComponent line_5
      fillColor = $[1,1,1]
      stopVal [duration (s)] = 6.0
      units = pix
      lineColor = $[0.945,-1.000,-0.929]
      startVal [time (s)] = 0.0
      size = (1, 300)
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    CodeComponent code_6
      Begin Routine:
        xvel1 = (xvelList.pop()/2)
        xvel2 = (xvelList.pop()/2)
        xvel3 = (xvelList.pop()/2)
        xvel4 = (xvelList.pop()/2)
        xvel5 = (xvelList.pop()/2)
        gistTime = gistTimeList.pop()
        ySin1 = np.ndarray.tolist(50*np.sin(yFramerate*np.pi*xvel5))
        ySin2 = np.ndarray.tolist(50*np.sin(yFramerate*np.pi*xvel4))
        ySin3 = np.ndarray.tolist(50*np.sin(yFramerate*np.pi*xvel3))
        ySin4 = np.ndarray.tolist(50*np.sin(yFramerate*np.pi*xvel2))
        ySin5 = np.ndarray.tolist(50*np.sin(yFramerate*np.pi*xvel1))

        xCos1 = np.ndarray.tolist((150*np.cos(xFramerate*np.pi*xvel3)))
        xCos2 = np.ndarray.tolist((150*np.cos(xFramerate*np.pi*xvel4)))
        xCos3 = np.ndarray.tolist((150*np.cos(xFramerate*np.pi*xvel5)))
        xCos4 = np.ndarray.tolist((150*np.cos(xFramerate*np.pi*xvel1)))
        xCos5 = np.ndarray.tolist((150*np.cos(xFramerate*np.pi*xvel2)))
    RatingScaleComponent ratingMV_5
      pos = 0, 0.5
      high = 1
      startVal [time (s)] = 6.0
      disappear = True
      size = 1.0
      forceEndRoutine = False
      low = 0
      categoryChoices = 'man', 'vrouw'
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    RatingScaleComponent rating2_5
      labels = '1','20'
      pos = 0, -0.4
      high = 20
      startVal [condition] = $ratingMV_5.status==FINISHED
      markerStart = 10
      size = 1.0
      forceEndRoutine = True
      low = 1
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  Routine obj4_
    ImageComponent image_3
      stopVal [duration (s)] = 0.030
      pos [set every repeat] = [xpos.pop(), 0]
      units = pix
      startVal [time (s)] = gistTime
      image [set every repeat] = $imgName
      size = (100, 100)
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    PolygonComponent polygon_8
      fillColor = $[-1,-1,1]
      stopVal [time (s)] = 6.0
      pos [set every frame] = (xCos1.pop(), ySin1.pop())
      units = pix
      lineColor = $[-1,-1,1]
      startVal [time (s)] = 0.5
      nVertices = 90
      size = (5, 5)
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    PolygonComponent polygon_9
      fillColor = $[-1,-1,1]
      stopVal [time (s)] = 6.0
      pos [set every frame] = (xCos2.pop(), 25+ySin2.pop())
      units = pix
      lineColor = $[-1,-1,1]
      startVal [time (s)] = 0.5
      nVertices = 90
      size = (5, 5)
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    PolygonComponent polygon_12
      fillColor = $[-1,-1,1]
      stopVal [time (s)] = 6.0
      pos [set every frame] = (xCos3.pop(), 50+ySin3.pop())
      units = pix
      lineColor = $[-1,-1,1]
      startVal [time (s)] = 0.5
      nVertices = 90
      size = (5, 5)
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    PolygonComponent polygon_13
      fillColor = $[-1,-1,1]
      stopVal [time (s)] = 6.0
      pos [set every frame] = (xCos4.pop(), 75+ySin4.pop())
      units = pix
      lineColor = $[-1,-1,1]
      startVal [time (s)] = 0.5
      nVertices = 90
      size = (5, 5)
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    PolygonComponent line_2
      fillColor = $[1,1,1]
      stopVal [duration (s)] = 6.0
      units = pix
      lineColor = $[0.945,-1.000,-0.929]
      startVal [time (s)] = 0.0
      size = (1, 300)
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    CodeComponent code_3
      Begin Routine:
        xvel1 = (xvelList.pop()/2)
        xvel2 = (xvelList.pop()/2)
        xvel3 = (xvelList.pop()/2)
        xvel4 = (xvelList.pop()/2)
        gistTime = gistTimeList.pop()
        dir1 = directionList.pop()
        dir2 = directionList.pop()
        dir3 = directionList.pop()
        dir4 = directionList.pop()
        ySin1 = np.ndarray.tolist(50*np.sin(yFramerate*np.pi*(xvel4/2)))
        ySin2 = np.ndarray.tolist(50*np.sin(yFramerate*np.pi*(xvel3/2)))
        ySin3 = np.ndarray.tolist(50*np.sin(yFramerate*np.pi*xvel2))
        ySin4 = np.ndarray.tolist(50*np.sin(yFramerate*np.pi*xvel1))
        xCos1 = np.ndarray.tolist((150*np.cos(xFramerate*np.pi*xvel3)))
        xCos2 = np.ndarray.tolist((150*np.cos(xFramerate*np.pi*xvel4)))
        xCos3 = np.ndarray.tolist((150*np.cos(xFramerate*np.pi*xvel1)))
        xCos4 = np.ndarray.tolist((150*np.cos(xFramerate*np.pi*xvel2)))
    RatingScaleComponent ratingMV_2
      pos = 0, 0.5
      high = 1
      startVal [time (s)] = 6.0
      disappear = True
      size = 1.0
      forceEndRoutine = False
      low = 0
      categoryChoices = 'man', 'vrouw'
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    RatingScaleComponent rating2_2
      labels = '1','20'
      pos = 0, -0.4
      high = 20
      startVal [condition] = $ratingMV_2.status==FINISHED
      markerStart = 10
      size = 1.0
      forceEndRoutine = True
      low = 1
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'imgName': u'gist/vrouw1.png', 'corrAns': u'v'},
      {'imgName': u'gist/vrouw2.png', 'corrAns': u'v'},
      {'imgName': u'gist/vrouw3.png', 'corrAns': u'v'},
      {'imgName': u'gist/vrouw4.png', 'corrAns': u'v'},
      {'imgName': u'gist/dier1.png', 'corrAns': u'v'},
      {'imgName': u'gist/dier2.png', 'corrAns': u'v'},
      {'imgName': u'gist/dier3.png', 'corrAns': u'v'},
      {'imgName': u'gist/dier4.png', 'corrAns': u'v'},
      {'imgName': u'gist/man1.png', 'corrAns': None},
      {'imgName': u'gist/man2.png', 'corrAns': None},
      {'imgName': u'gist/man3.png', 'corrAns': None}]
    Routine obj1
    Routine obj2
    Routine obj3
    Routine obj4__2
    Routine obj4_
  LoopTerminator trials
